<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.3"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>D1</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>D2</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:DistinctUntilChanged" />
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>isMoving?</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>isMoving?</Name>
      </Expression>
      <Expression xsi:type="CreateObservable">
        <Name>CheckCondition</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Condition">
              <Name>isNotMoving</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="DueTime" />
              <Property Name="Period" />
            </Expression>
            <Expression xsi:type="SelectMany">
              <Name>Timer</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="DueTime" />
                    <Property Name="Period" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timer">
                      <rx:DueTime>PT1S</rx:DueTime>
                      <rx:Period>PT2S</rx:Period>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Switch" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:SerialStringWrite">
          <io:PortName>COM5</io:PortName>
          <io:NewLine>\r\n</io:NewLine>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="5" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="5" Label="Source2" />
      <Edge From="4" To="5" Label="Source3" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>