<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.3"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:dlc="clr-namespace:Bonsai.DeepLabCut;assembly=Bonsai.DeepLabCut"
                 xmlns:p1="clr-namespace:ZaberMovement;assembly=ZaberMovement"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CameraCapture">
          <cv:Index>0</cv:Index>
          <cv:CaptureProperties>
            <cv:CapturePropertyAssignment>
              <cv:Property>FrameWidth</cv:Property>
              <cv:Value>1896</cv:Value>
            </cv:CapturePropertyAssignment>
            <cv:CapturePropertyAssignment>
              <cv:Property>FrameHeight</cv:Property>
              <cv:Value>1896</cv:Value>
            </cv:CapturePropertyAssignment>
            <cv:CapturePropertyAssignment>
              <cv:Property>Fps</cv:Property>
              <cv:Value>90</cv:Value>
            </cv:CapturePropertyAssignment>
          </cv:CaptureProperties>
        </Combinator>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Timestamp" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="io:CsvWriter">
          <io:FileName>C:\Users\emily\Desktop\tst_.csv</io:FileName>
          <io:Append>false</io:Append>
          <io:Overwrite>false</io:Overwrite>
          <io:Suffix>Timestamp</io:Suffix>
          <io:IncludeHeader>false</io:IncludeHeader>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="dlc:DetectPose">
            <dlc:ModelFileName>C:\Users\emily\Desktop\rigtesting-thedennislab-2022-07-19\exported-models\DLC_rigtesting_resnet_50_iteration-6_shuffle-1\snapshot-1030000.pb</dlc:ModelFileName>
            <dlc:PoseConfigFileName>C:\Users\emily\Desktop\rigtesting-thedennislab-2022-07-19\dlc-models\iteration-4\rigtestingJul19-trainset95shuffle1\test\pose_cfg.yaml</dlc:PoseConfigFileName>
            <dlc:MinConfidence>0.9</dlc:MinConfidence>
            <dlc:ScaleFactor>1</dlc:ScaleFactor>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:ZaberDevice">
          <p1:PortName>COM3</p1:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="DoubleProperty">
          <Value>140000</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="DoubleProperty">
          <Value>121000</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:ZaberMovePrecise" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT0S</rx:DueTime>
          <rx:Period>PT1S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:ZaberLocation" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="0" To="3" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="4" To="7" Label="Source1" />
      <Edge From="4" To="11" Label="Source1" />
      <Edge From="5" To="7" Label="Source3" />
      <Edge From="6" To="7" Label="Source2" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source2" />
      <Edge From="11" To="12" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>